// This model of the Na/K ATPase reproduces Figure 9B for [MgATP] = 1 mM.
// c_MgATP0 can be changed to 1,2,3,4 or 5 to plot the curve other concentrations of MgATP.
// Note that the steady state was approximated by increasing the membrane potential
// at a rate slow enough for the transporter to be near steady state.
def model Terkildsen_NaK_BG as
  def unit J_per_K_per_mol as
    unit joule;
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit C_per_mol as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit fF as
    unit farad {pref: femto};
  enddef;
  def unit fmol as
    unit mole {pref: femto};
  enddef;
  def unit per_fmol as
    unit fmol {expo: -1};
  enddef;
  def unit fmol_per_sec as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit fC as
    unit coulomb {pref: femto};
  enddef;
  def unit fA as
    unit ampere {pref: femto};
  enddef;
  def unit J_per_mol as
    unit joule;
    unit mole {expo: -1};
  enddef;
  def unit volt_per_sec as
    unit volt;
    unit second {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit pL as
    unit litre {pref: pico};
  enddef;

  def comp environment as
    // Time
    var t: second {init: 0};
    // Physical parameters
    var R: J_per_K_per_mol {init: 8.314};
    var T: kelvin {init: 310};
    var F: C_per_mol {init: 96485};
    // Bond graph parameters
    var C_m: fF {init: 153400};
    var K_1: per_fmol {init: 101619537.2009};
    var K_10: per_fmol {init: 20459.5509};
    var K_11: per_fmol {init: 121.4456};
    var K_12: per_fmol {init: 3.1436};
    var K_13: per_fmol {init: 0.32549};
    var K_14: per_fmol {init: 156.3283};
    var K_15: per_fmol {init: 1977546.8577};
    var K_2: per_fmol {init: 63209.8623};
    var K_3: per_fmol {init: 157.2724};
    var K_4: per_fmol {init: 14.0748};
    var K_5: per_fmol {init: 5.0384};
    var K_6: per_fmol {init: 92.6964};
    var K_7: per_fmol {init: 4854.5924};
    var K_8: per_fmol {init: 15260.9786};
    var K_9: per_fmol {init: 13787022.8009};
    var K_H: per_fmol {init: 0.04565};
    var K_Ke: per_fmol {init: 0.009236};
    var K_Ki: per_fmol {init: 0.0012595};
    var K_MgADP: per_fmol {init: 7.976e-05};
    var K_MgATP: per_fmol {init: 2.3715};
    var K_Nae: per_fmol {init: 0.0061242};
    var K_Nai: per_fmol {init: 0.00083514};
    var K_P: per_fmol {init: 0.04565};
    var kappa_1: fmol_per_sec {init: 330.5462};
    var kappa_10: fmol_per_sec {init: 259461.6507};
    var kappa_11: fmol_per_sec {init: 172042.3334};
    var kappa_12: fmol_per_sec {init: 6646440.3909};
    var kappa_13: fmol_per_sec {init: 597.4136};
    var kappa_14: fmol_per_sec {init: 70.9823};
    var kappa_15: fmol_per_sec {init: 0.015489};
    var kappa_2: fmol_per_sec {init: 132850.9145};
    var kappa_3: fmol_per_sec {init: 200356.0223};
    var kappa_4: fmol_per_sec {init: 2238785.3951};
    var kappa_5: fmol_per_sec {init: 10787.9052};
    var kappa_6: fmol_per_sec {init: 15.3533};
    var kappa_7: fmol_per_sec {init: 2.3822};
    var kappa_8: fmol_per_sec {init: 2.2855};
    var kappa_9: fmol_per_sec {init: 1540.1349};
    var z_5: dimensionless {init: -0.054951};
    var z_8: dimensionless {init: -0.94505};
    var zF_5: C_per_mol;
    var zF_8: C_per_mol;
    zF_5 = z_5*F;
    zF_8 = z_8*F;
    // States (and initial conditions)
    var x_H: fmol {init: 0.0030534};
    var x_Ke: fmol {init: 27.9828};
    var x_Ki: fmol {init: 5510};
    var x_MgADP: fmol {init: 1.33};
    var x_MgATP: fmol {init: x_MgATP0};
    var x_Nae: fmol {init: 725.48};
    var x_Nai: fmol {init: 380};
    var x_P7: fmol {init: 0.331980313955509};
    var x_P_i: fmol {init: 15.0898};
    var q_mem: fC {init: -61360};
    var x_P14: fmol {init: 0.0352055084848669};
    var x_P15: fmol {init: 0.000250802607996716};
    var x_P1: fmol {init: 5.08046762752778e-06};
    var x_P2: fmol {init: 0.00117692038835061};
    var x_P3: fmol {init: 0.0681600122067962};
    var x_P4: fmol {init: 0.24170354694622};
    var x_P5: fmol {init: 0.214276996858967};
    var x_P6: fmol {init: 0.00162339224076387};
    var x_P10: fmol {init: 5.0981140543815e-09};
    var x_P11: fmol {init: 1.95553644749923e-07};
    var x_P12: fmol {init: 2.53392033375182e-06};
    var x_P13: fmol {init: 6.47030714646585e-06};
    var x_P8: fmol {init: 0.105613220945029};
    var x_P9: fmol {init: 1.88047934975453e-11};
    var c_MgATP0: mM {init: 1};
    var x_MgATP0: fmol;
    x_MgATP0 = c_MgATP0*W_i;
    // Volumes
    var W_i: pL {init: 38.0};
    var W_e: pL {init: 5.182};
    // Concentrations
    var c_H: mM;
    var c_Ke: mM;
    var c_Ki: mM;
    var c_MgADP: mM;
    var c_MgATP: mM;
    var c_Nae: mM;
    var c_Nai: mM;
    var c_P_i: mM;
    c_H = x_H/W_i;
    c_Ke = x_Ke/W_e;
    c_Ki = x_Ki/W_i;
    c_MgADP = x_MgADP/W_i;
    c_MgATP = x_MgATP/W_i;
    c_Nae = x_Nae/W_e;
    c_Nai = x_Nai/W_i;
    c_P_i = x_P_i/W_i;
    // Output variables
    var DeltaG: J_per_mol;
    DeltaG = 3{dimensionless}*mu_Nae+2{dimensionless}*mu_Ki+mu_MgADP+mu_P_i+mu_H-3{dimensionless}*mu_Nai-2{dimensionless}*mu_Ke-mu_MgATP-F*V_mem;
    // Bond variables
    var e_1: J_per_mol;
    var e_2: J_per_mol;
    var e_3: J_per_mol;
    var e_4: J_per_mol;
    var e_5: J_per_mol;
    var e_6: J_per_mol;
    var e_7: J_per_mol;
    var e_8: J_per_mol;
    var e_9: J_per_mol;
    var e_10: J_per_mol;
    var e_11: J_per_mol;
    var e_12: J_per_mol;
    var e_13: J_per_mol;
    var e_14: J_per_mol;
    var e_15: J_per_mol;
    var e_16: J_per_mol;
    var e_17: J_per_mol;
    var e_18: J_per_mol;
    var e_19: J_per_mol;
    var e_20: J_per_mol;
    var e_21: volt;
    var e_22: volt;
    var e_23: volt;
    var e_24: J_per_mol;
    var e_25: J_per_mol;
    var e_26: J_per_mol;
    var e_27: J_per_mol;
    var e_28: J_per_mol;
    var e_29: J_per_mol;
    var e_30: J_per_mol;
    var e_31: J_per_mol;
    var e_32: J_per_mol;
    var e_33: J_per_mol;
    var e_34: J_per_mol;
    var e_35: J_per_mol;
    var e_36: J_per_mol;
    var e_37: J_per_mol;
    var e_38: J_per_mol;
    var e_39: J_per_mol;
    var e_40: J_per_mol;
    var e_41: J_per_mol;
    var e_42: J_per_mol;
    var e_43: J_per_mol;
    var e_44: J_per_mol;
    var e_45: J_per_mol;
    var e_46: J_per_mol;
    var e_47: J_per_mol;
    var e_48: J_per_mol;
    var e_49: J_per_mol;
    var e_50: J_per_mol;
    var e_51: J_per_mol;
    var e_52: J_per_mol;
    var e_53: J_per_mol;
    var e_54: J_per_mol;
    var e_55: J_per_mol;
    var e_56: J_per_mol;
    var e_57: J_per_mol;
    var e_58: J_per_mol;
    var e_59: J_per_mol;
    var e_60: J_per_mol;
    var e_61: J_per_mol;
    var e_62: J_per_mol;
    var e_63: J_per_mol;
    var e_64: J_per_mol;
    var e_65: J_per_mol;
    var e_66: J_per_mol;
    var e_67: J_per_mol;
    var e_68: J_per_mol;
    var e_69: J_per_mol;
    var e_70: J_per_mol;
    var e_71: J_per_mol;
    var e_72: J_per_mol;
    var e_73: J_per_mol;
    var e_74: J_per_mol;
    var e_75: J_per_mol;
    var e_76: J_per_mol;
    var e_77: J_per_mol;
    var e_78: J_per_mol;
    var e_79: J_per_mol;
    var e_80: J_per_mol;
    var e_81: J_per_mol;
    var e_82: J_per_mol;
    var e_83: J_per_mol;
    var e_84: J_per_mol;
    var e_85: J_per_mol;
    var e_86: J_per_mol;
    var f_1: fmol_per_sec;
    var f_2: fmol_per_sec;
    var f_3: fmol_per_sec;
    var f_4: fmol_per_sec;
    var f_5: fmol_per_sec;
    var f_6: fmol_per_sec;
    var f_7: fmol_per_sec;
    var f_8: fmol_per_sec;
    var f_9: fmol_per_sec;
    var f_10: fmol_per_sec;
    var f_11: fmol_per_sec;
    var f_12: fmol_per_sec;
    var f_13: fmol_per_sec;
    var f_14: fmol_per_sec;
    var f_15: fmol_per_sec;
    var f_16: fmol_per_sec;
    var f_17: fmol_per_sec;
    var f_18: fmol_per_sec;
    var f_19: fmol_per_sec;
    var f_20: fmol_per_sec;
    var f_21: fA;
    var f_22: fA;
    var f_23: fA;
    var f_24: fmol_per_sec;
    var f_25: fmol_per_sec;
    var f_26: fmol_per_sec;
    var f_27: fmol_per_sec;
    var f_28: fmol_per_sec;
    var f_29: fmol_per_sec;
    var f_30: fmol_per_sec;
    var f_31: fmol_per_sec;
    var f_32: fmol_per_sec;
    var f_33: fmol_per_sec;
    var f_34: fmol_per_sec;
    var f_35: fmol_per_sec;
    var f_36: fmol_per_sec;
    var f_37: fmol_per_sec;
    var f_38: fmol_per_sec;
    var f_39: fmol_per_sec;
    var f_40: fmol_per_sec;
    var f_41: fmol_per_sec;
    var f_42: fmol_per_sec;
    var f_43: fmol_per_sec;
    var f_44: fmol_per_sec;
    var f_45: fmol_per_sec;
    var f_46: fmol_per_sec;
    var f_47: fmol_per_sec;
    var f_48: fmol_per_sec;
    var f_49: fmol_per_sec;
    var f_50: fmol_per_sec;
    var f_51: fmol_per_sec;
    var f_52: fmol_per_sec;
    var f_53: fmol_per_sec;
    var f_54: fmol_per_sec;
    var f_55: fmol_per_sec;
    var f_56: fmol_per_sec;
    var f_57: fmol_per_sec;
    var f_58: fmol_per_sec;
    var f_59: fmol_per_sec;
    var f_60: fmol_per_sec;
    var f_61: fmol_per_sec;
    var f_62: fmol_per_sec;
    var f_63: fmol_per_sec;
    var f_64: fmol_per_sec;
    var f_65: fmol_per_sec;
    var f_66: fmol_per_sec;
    var f_67: fmol_per_sec;
    var f_68: fmol_per_sec;
    var f_69: fmol_per_sec;
    var f_70: fmol_per_sec;
    var f_71: fmol_per_sec;
    var f_72: fmol_per_sec;
    var f_73: fmol_per_sec;
    var f_74: fmol_per_sec;
    var f_75: fmol_per_sec;
    var f_76: fmol_per_sec;
    var f_77: fmol_per_sec;
    var f_78: fmol_per_sec;
    var f_79: fmol_per_sec;
    var f_80: fmol_per_sec;
    var f_81: fmol_per_sec;
    var f_82: fmol_per_sec;
    var f_83: fmol_per_sec;
    var f_84: fmol_per_sec;
    var f_85: fmol_per_sec;
    var f_86: fmol_per_sec;
    // Constitutive equations
    // C:H
    var mu_H: J_per_mol;
    var v_H: fmol_per_sec;
    e_14 = mu_H;
    v_H = f_14;
    ode(x_H, t) = 0{fmol_per_sec};
    mu_H = R*T*ln(K_H*x_H);
    // C:Ke
    var mu_Ke: J_per_mol;
    var v_Ke: fmol_per_sec;
    e_11 = mu_Ke;
    v_Ke = f_11;
    ode(x_Ke, t) = 0{fmol_per_sec};
    mu_Ke = R*T*ln(K_Ke*x_Ke);
    // C:Ki
    var mu_Ki: J_per_mol;
    var v_Ki: fmol_per_sec;
    e_2 = mu_Ki;
    v_Ki = f_2;
    ode(x_Ki, t) = 0{fmol_per_sec};
    mu_Ki = R*T*ln(K_Ki*x_Ki);
    // C:MgADP
    var mu_MgADP: J_per_mol;
    var v_MgADP: fmol_per_sec;
    e_9 = mu_MgADP;
    v_MgADP = f_9;
    ode(x_MgADP, t) = 0{fmol_per_sec};
    mu_MgADP = R*T*ln(K_MgADP*x_MgADP);
    // C:MgATP
    var mu_MgATP: J_per_mol;
    var v_MgATP: fmol_per_sec;
    e_16 = mu_MgATP;
    v_MgATP = f_16;
    ode(x_MgATP, t) = 0{fmol_per_sec};
    mu_MgATP = R*T*ln(K_MgATP*x_MgATP);
    // C:Nae
    var mu_Nae: J_per_mol;
    var v_Nae: fmol_per_sec;
    e_19 = mu_Nae;
    v_Nae = f_19;
    ode(x_Nae, t) = 0{fmol_per_sec};
    mu_Nae = R*T*ln(K_Nae*x_Nae);
    // C:Nai
    var mu_Nai: J_per_mol;
    var v_Nai: fmol_per_sec;
    e_5 = mu_Nai;
    v_Nai = f_5;
    ode(x_Nai, t) = 0{fmol_per_sec};
    mu_Nai = R*T*ln(K_Nai*x_Nai);
    // C:P7
    var mu_P7: J_per_mol;
    var v_P7: fmol_per_sec;
    e_8 = mu_P7;
    v_P7 = f_8;
    ode(x_P7, t) = v_P7;
    mu_P7 = R*T*ln(K_7*x_P7);
    // C:P_i
    var mu_P_i: J_per_mol;
    var v_P_i: fmol_per_sec;
    e_15 = mu_P_i;
    v_P_i = f_15;
    ode(x_P_i, t) = 0{fmol_per_sec};
    mu_P_i = R*T*ln(K_P*x_P_i);
    // C:mem
    var V_mem: volt;
    var I_mem: fA;
    e_23 = V_mem;
    I_mem = f_23;
    ode(q_mem, t) = 0.001{volt_per_sec}*C_m;
    V_mem = q_mem/C_m;
    // Re:R13
    var Af_R13: J_per_mol;
    var Ar_R13: J_per_mol;
    var v_R13: fmol_per_sec;
    Af_R13 = e_12;
    Ar_R13 = e_13;
    f_12 = v_R13;
    f_13 = v_R13;
    v_R13 = kappa_13*(exp(Af_R13/(R*T))-exp(Ar_R13/(R*T)));
    // Re:R15
    var Af_R15: J_per_mol;
    var Ar_R15: J_per_mol;
    var v_R15: fmol_per_sec;
    Af_R15 = e_17;
    Ar_R15 = e_4;
    f_17 = v_R15;
    f_4 = v_R15;
    v_R15 = kappa_15*(exp(Af_R15/(R*T))-exp(Ar_R15/(R*T)));
    // Re:R6
    var Af_R6: J_per_mol;
    var Ar_R6: J_per_mol;
    var v_R6: fmol_per_sec;
    Af_R6 = e_1;
    Ar_R6 = e_6;
    f_1 = v_R6;
    f_6 = v_R6;
    v_R6 = kappa_6*(exp(Af_R6/(R*T))-exp(Ar_R6/(R*T)));
    // Re:R7
    var Af_R7: J_per_mol;
    var Ar_R7: J_per_mol;
    var v_R7: fmol_per_sec;
    Af_R7 = e_10;
    Ar_R7 = e_20;
    f_10 = v_R7;
    f_20 = v_R7;
    v_R7 = kappa_7*(exp(Af_R7/(R*T))-exp(Ar_R7/(R*T)));
    // C:P14
    var mu_P14: J_per_mol;
    var v_P14: fmol_per_sec;
    e_24 = mu_P14;
    v_P14 = f_24;
    ode(x_P14, t) = v_P14;
    mu_P14 = R*T*ln(K_14*x_P14);
    // C:P15
    var mu_P15: J_per_mol;
    var v_P15: fmol_per_sec;
    e_28 = mu_P15;
    v_P15 = f_28;
    ode(x_P15, t) = v_P15;
    mu_P15 = R*T*ln(K_15*x_P15);
    // Re:R14
    var Af_R14: J_per_mol;
    var Ar_R14: J_per_mol;
    var v_R14: fmol_per_sec;
    Af_R14 = e_26;
    Ar_R14 = e_27;
    f_26 = v_R14;
    f_27 = v_R14;
    v_R14 = kappa_14*(exp(Af_R14/(R*T))-exp(Ar_R14/(R*T)));
    // C:P1
    var mu_P1: J_per_mol;
    var v_P1: fmol_per_sec;
    e_30 = mu_P1;
    v_P1 = f_30;
    ode(x_P1, t) = v_P1;
    mu_P1 = R*T*ln(K_1*x_P1);
    // C:P2
    var mu_P2: J_per_mol;
    var v_P2: fmol_per_sec;
    e_39 = mu_P2;
    v_P2 = f_39;
    ode(x_P2, t) = v_P2;
    mu_P2 = R*T*ln(K_2*x_P2);
    // C:P3
    var mu_P3: J_per_mol;
    var v_P3: fmol_per_sec;
    e_34 = mu_P3;
    v_P3 = f_34;
    ode(x_P3, t) = v_P3;
    mu_P3 = R*T*ln(K_3*x_P3);
    // C:P4
    var mu_P4: J_per_mol;
    var v_P4: fmol_per_sec;
    e_44 = mu_P4;
    v_P4 = f_44;
    ode(x_P4, t) = v_P4;
    mu_P4 = R*T*ln(K_4*x_P4);
    // C:P5
    var mu_P5: J_per_mol;
    var v_P5: fmol_per_sec;
    e_51 = mu_P5;
    v_P5 = f_51;
    ode(x_P5, t) = v_P5;
    mu_P5 = R*T*ln(K_5*x_P5);
    // C:P6
    var mu_P6: J_per_mol;
    var v_P6: fmol_per_sec;
    e_57 = mu_P6;
    v_P6 = f_57;
    ode(x_P6, t) = v_P6;
    mu_P6 = R*T*ln(K_6*x_P6);
    // Re:R1
    var Af_R1: J_per_mol;
    var Ar_R1: J_per_mol;
    var v_R1: fmol_per_sec;
    Af_R1 = e_35;
    Ar_R1 = e_36;
    f_35 = v_R1;
    f_36 = v_R1;
    v_R1 = kappa_1*(exp(Af_R1/(R*T))-exp(Ar_R1/(R*T)));
    // Re:R2
    var Af_R2: J_per_mol;
    var Ar_R2: J_per_mol;
    var v_R2: fmol_per_sec;
    Af_R2 = e_31;
    Ar_R2 = e_32;
    f_31 = v_R2;
    f_32 = v_R2;
    v_R2 = kappa_2*(exp(Af_R2/(R*T))-exp(Ar_R2/(R*T)));
    // Re:R3
    var Af_R3: J_per_mol;
    var Ar_R3: J_per_mol;
    var v_R3: fmol_per_sec;
    Af_R3 = e_42;
    Ar_R3 = e_43;
    f_42 = v_R3;
    f_43 = v_R3;
    v_R3 = kappa_3*(exp(Af_R3/(R*T))-exp(Ar_R3/(R*T)));
    // Re:R4
    var Af_R4: J_per_mol;
    var Ar_R4: J_per_mol;
    var v_R4: fmol_per_sec;
    Af_R4 = e_46;
    Ar_R4 = e_47;
    f_46 = v_R4;
    f_47 = v_R4;
    v_R4 = kappa_4*(exp(Af_R4/(R*T))-exp(Ar_R4/(R*T)));
    // Re:R5
    var Af_R5: J_per_mol;
    var Ar_R5: J_per_mol;
    var v_R5: fmol_per_sec;
    Af_R5 = e_53;
    Ar_R5 = e_55;
    f_53 = v_R5;
    f_55 = v_R5;
    v_R5 = kappa_5*(exp(Af_R5/(R*T))-exp(Ar_R5/(R*T)));
    // C:P10
    var mu_P10: J_per_mol;
    var v_P10: fmol_per_sec;
    e_70 = mu_P10;
    v_P10 = f_70;
    ode(x_P10, t) = v_P10;
    mu_P10 = R*T*ln(K_10*x_P10);
    // C:P11
    var mu_P11: J_per_mol;
    var v_P11: fmol_per_sec;
    e_75 = mu_P11;
    v_P11 = f_75;
    ode(x_P11, t) = v_P11;
    mu_P11 = R*T*ln(K_11*x_P11);
    // C:P12
    var mu_P12: J_per_mol;
    var v_P12: fmol_per_sec;
    e_83 = mu_P12;
    v_P12 = f_83;
    ode(x_P12, t) = v_P12;
    mu_P12 = R*T*ln(K_12*x_P12);
    // C:P13
    var mu_P13: J_per_mol;
    var v_P13: fmol_per_sec;
    e_79 = mu_P13;
    v_P13 = f_79;
    ode(x_P13, t) = v_P13;
    mu_P13 = R*T*ln(K_13*x_P13);
    // C:P8
    var mu_P8: J_per_mol;
    var v_P8: fmol_per_sec;
    e_59 = mu_P8;
    v_P8 = f_59;
    ode(x_P8, t) = v_P8;
    mu_P8 = R*T*ln(K_8*x_P8);
    // C:P9
    var mu_P9: J_per_mol;
    var v_P9: fmol_per_sec;
    e_65 = mu_P9;
    v_P9 = f_65;
    ode(x_P9, t) = v_P9;
    mu_P9 = R*T*ln(K_9*x_P9);
    // Re:R10
    var Af_R10: J_per_mol;
    var Ar_R10: J_per_mol;
    var v_R10: fmol_per_sec;
    Af_R10 = e_71;
    Ar_R10 = e_72;
    f_71 = v_R10;
    f_72 = v_R10;
    v_R10 = kappa_10*(exp(Af_R10/(R*T))-exp(Ar_R10/(R*T)));
    // Re:R11
    var Af_R11: J_per_mol;
    var Ar_R11: J_per_mol;
    var v_R11: fmol_per_sec;
    Af_R11 = e_81;
    Ar_R11 = e_82;
    f_81 = v_R11;
    f_82 = v_R11;
    v_R11 = kappa_11*(exp(Af_R11/(R*T))-exp(Ar_R11/(R*T)));
    // Re:R12
    var Af_R12: J_per_mol;
    var Ar_R12: J_per_mol;
    var v_R12: fmol_per_sec;
    Af_R12 = e_77;
    Ar_R12 = e_78;
    f_77 = v_R12;
    f_78 = v_R12;
    v_R12 = kappa_12*(exp(Af_R12/(R*T))-exp(Ar_R12/(R*T)));
    // Re:R8
    var Af_R8: J_per_mol;
    var Ar_R8: J_per_mol;
    var v_R8: fmol_per_sec;
    Af_R8 = e_60;
    Ar_R8 = e_61;
    f_60 = v_R8;
    f_61 = v_R8;
    v_R8 = kappa_8*(exp(Af_R8/(R*T))-exp(Ar_R8/(R*T)));
    // Re:R9
    var Af_R9: J_per_mol;
    var Ar_R9: J_per_mol;
    var v_R9: fmol_per_sec;
    Af_R9 = e_66;
    Ar_R9 = e_86;
    f_66 = v_R9;
    f_86 = v_R9;
    v_R9 = kappa_9*(exp(Af_R9/(R*T))-exp(Ar_R9/(R*T)));
    // Junction equations
    // 0 junction #1
    e_3 = e_5;
    f_5 = f_3;
    // 0 junction #2
    e_7 = e_8;
    e_10 = e_8;
    f_8 = f_7-f_10;
    // 0 junction #3
    e_21 = e_23;
    e_22 = e_23;
    f_23 = f_21+f_22;
    // 1 junction #1
    f_7 = f_6;
    f_9 = f_6;
    e_6 = e_7+e_9;
    // 1 junction #2
    f_14 = f_13;
    f_15 = f_13;
    f_18 = f_13;
    e_13 = e_14+e_15+e_18;
    // 0 junction #4
    e_25 = e_24;
    e_18 = e_24;
    f_24 = -f_25+f_18;
    // 0 junction #5
    e_27 = e_28;
    e_17 = e_28;
    f_28 = f_27-f_17;
    // 0 junction #6
    e_29 = e_16;
    f_16 = -f_29;
    // 1 junction #3
    f_25 = f_26;
    f_29 = f_26;
    e_26 = e_25+e_29;
    // 0 junction #7
    e_35 = e_30;
    e_4 = e_30;
    f_30 = -f_35+f_4;
    // 0 junction #8
    e_37 = e_2;
    e_40 = e_2;
    f_2 = f_37+f_40;
    // 0 junction #9
    e_33 = e_34;
    e_41 = e_34;
    f_34 = f_33-f_41;
    // 0 junction #10
    e_31 = e_39;
    e_38 = e_39;
    f_39 = -f_31+f_38;
    // 0 junction #11
    e_43 = e_44;
    e_45 = e_44;
    f_44 = f_43-f_45;
    // 0 junction #12
    e_48 = e_3;
    e_50 = e_3;
    f_3 = -f_48-f_50;
    // 0 junction #13
    e_49 = e_50;
    e_54 = e_50;
    f_50 = f_49+f_54;
    // 0 junction #14
    e_47 = e_51;
    e_52 = e_51;
    f_51 = f_47-f_52;
    // 0 junction #15
    e_56 = e_57;
    e_1 = e_57;
    f_57 = f_56-f_1;
    // 1 junction #4
    f_33 = f_32;
    f_40 = f_32;
    e_32 = e_33+e_40;
    // 1 junction #5
    f_37 = f_36;
    f_38 = f_36;
    e_36 = e_37+e_38;
    // 1 junction #6
    f_41 = f_42;
    f_48 = f_42;
    e_42 = e_41+e_48;
    // 1 junction #7
    f_45 = f_46;
    f_49 = f_46;
    e_46 = e_45+e_49;
    // 1 junction #8
    f_52 = f_53;
    f_54 = f_53;
    e_53 = e_52+e_54;
    // 1 junction #9
    f_56 = f_55;
    f_58 = f_55;
    e_55 = e_56+e_58;
    // 0 junction #16
    e_60 = e_59;
    e_20 = e_59;
    f_59 = -f_60+f_20;
    // 0 junction #17
    e_63 = e_19;
    e_68 = e_19;
    f_19 = f_63+f_68;
    // 0 junction #18
    e_64 = e_65;
    e_66 = e_65;
    f_65 = f_64-f_66;
    // 0 junction #19
    e_69 = e_68;
    e_73 = e_68;
    f_68 = f_69+f_73;
    // 0 junction #20
    e_67 = e_70;
    e_71 = e_70;
    f_70 = f_67-f_71;
    // 0 junction #21
    e_74 = e_75;
    e_80 = e_75;
    f_75 = f_74-f_80;
    // 0 junction #22
    e_84 = e_11;
    e_85 = e_11;
    f_11 = -f_84-f_85;
    // 0 junction #23
    e_78 = e_79;
    e_12 = e_79;
    f_79 = f_78-f_12;
    // 0 junction #24
    e_76 = e_83;
    e_82 = e_83;
    f_83 = -f_76+f_82;
    // 1 junction #10
    f_62 = f_61;
    f_63 = f_61;
    f_64 = f_61;
    e_61 = e_62+e_63+e_64;
    // 1 junction #11
    f_67 = f_86;
    f_69 = f_86;
    e_86 = e_67+e_69;
    // 1 junction #12
    f_73 = f_72;
    f_74 = f_72;
    e_72 = e_73+e_74;
    // 1 junction #13
    f_80 = f_81;
    f_84 = f_81;
    e_81 = e_80+e_84;
    // 1 junction #14
    f_76 = f_77;
    f_85 = f_77;
    e_77 = e_76+e_85;
    // Power conversion
    // TF:zF_5
    e_58 = zF_5*e_22;
    f_22 = zF_5*f_58;
    // TF:zF_8
    e_62 = zF_8*e_21;
    f_21 = zF_8*f_62;
  enddef;
enddef;
