<?xml version='1.0'?>
<!-- This is the original kinetic model of SERCA by Tran et al.
 This model reproduces the kinetic curve of Figure 5A-->
<model cmeta:id="tran_model_2009" name="tran_model_2009" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="second"/>
    </units>
    <units name="per_second_squared">
        <unit exponent="-2" units="second"/>
    </units>
    <units name="millimolar">
        <unit prefix="milli" units="mole"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <units name="flux">
        <unit units="millimolar"/>
        <unit exponent="-1" units="second"/>
    </units>
    <units name="millimolar_squared">
        <unit exponent="2" units="millimolar"/>
    </units>
    <units name="second_order_rate_constant">
        <unit exponent="-1" units="millimolar"/>
        <unit exponent="-1" units="second"/>
    </units>
    <component name="environment">
        <variable cmeta:id="environment_time" name="time" public_interface="out" units="second"/>
    </component>
    <component name="SERCA">
        <variable initial_value="25900" name="k_p1" units="second_order_rate_constant"/>
        <variable initial_value="2540" name="k_p2" units="first_order_rate_constant"/>
        <variable initial_value="20.5" name="k_p3" units="first_order_rate_constant"/>
        <variable initial_value="2" name="k_m1" units="first_order_rate_constant"/>
        <variable initial_value="67200" name="k_m2" units="second_order_rate_constant"/>
        <variable initial_value="149" name="k_m3" units="second_order_rate_constant"/>
        <variable initial_value="0.9" name="kdcai" units="millimolar"/>
        <variable initial_value="2.24" name="kdcasr" units="millimolar"/>
        <variable initial_value="1.09e-5" name="kdh1" units="millimolar"/>
        <variable initial_value="3.54e-3" name="kdhi" units="millimolar_squared"/>
        <variable initial_value="1.05e-8" name="kdhsr" units="millimolar_squared"/>
        <variable initial_value="7.24e-5" name="kdh" units="millimolar"/>
        <variable initial_value="2" name="n" units="dimensionless"/>
        <variable cmeta:id="SERCA_Ca_i" initial_value="150e-6" name="Ca_i" units="millimolar"/>
        <variable cmeta:id="SERCA_Ca_sr" initial_value="0" name="Ca_sr" units="millimolar"/>
        <variable cmeta:id="SERCA_H_i" initial_value="1e-4" name="H_i" units="millimolar"/>
        <variable cmeta:id="SERCA_ATP" initial_value="0.1" name="ATP" units="millimolar"/>
        <variable cmeta:id="SERCA_ADP" initial_value="36.3e-3" name="ADP" units="millimolar"/>
        <variable cmeta:id="SERCA_P_i" initial_value="15" name="P_i" units="millimolar"/>
        <variable name="T_Cai" units="dimensionless"/>
        <variable name="T_Casr" units="dimensionless"/>
        <variable name="T_H1" units="dimensionless"/>
        <variable name="T_Hi" units="dimensionless"/>
        <variable name="T_Hsr" units="dimensionless"/>
        <variable name="T_H" units="dimensionless"/>
        <variable cmeta:id="SERCA_a_p1" name="a_p1" units="first_order_rate_constant"/>
        <variable name="a_p2" units="first_order_rate_constant"/>
        <variable name="a_p3" units="first_order_rate_constant"/>
        <variable name="a_m1" units="first_order_rate_constant"/>
        <variable name="a_m2" units="first_order_rate_constant"/>
        <variable name="a_m3" units="first_order_rate_constant"/>
        <variable name="s1" units="per_second_squared"/>
        <variable name="s2" units="per_second_squared"/>
        <variable name="s3" units="per_second_squared"/>
        <variable name="v_cycle" units="first_order_rate_constant"/>
        <variable name="time" public_interface="in" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>T_Cai</ci>
                <apply>
                    <divide/>
                    <ci>Ca_i</ci>
                    <ci>kdcai</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>T_Casr</ci>
                <apply>
                    <divide/>
                    <ci>Ca_sr</ci>
                    <ci>kdcasr</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>T_H1</ci>
                <apply>
                    <divide/>
                    <ci>H_i</ci>
                    <ci>kdh1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>T_Hi</ci>
                <apply>
                    <divide/>
                    <apply>
                        <power/>
                        <ci>H_i</ci>
                        <ci>n</ci>
                    </apply>
                    <ci>kdhi</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>T_Hsr</ci>
                <apply>
                    <divide/>
                    <apply>
                        <power/>
                        <ci>H_i</ci>
                        <ci>n</ci>
                    </apply>
                    <ci>kdhsr</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>T_H</ci>
                <apply>
                    <divide/>
                    <ci>H_i</ci>
                    <ci>kdh</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>a_p1</ci>
                <apply>
                    <times/>
                    <ci>k_p1</ci>
                    <ci>ATP</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>a_p2</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>k_p2</ci>
                        <apply>
                            <power/>
                            <ci>T_Cai</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <power/>
                            <ci>T_Cai</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                        <apply>
                            <times/>
                            <apply>
                                <power/>
                                <ci>T_Cai</ci>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                            <ci>T_Hi</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>T_Hi</ci>
                            <apply>
                                <plus/>
                                <cn cellml:units="dimensionless">1</cn>
                                <ci>T_H1</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>a_p3</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>k_p3</ci>
                        <ci>T_Hsr</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <apply>
                                <power/>
                                <ci>T_Casr</ci>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                            <ci>T_H</ci>
                        </apply>
                        <ci>T_H</ci>
                        <apply>
                            <times/>
                            <ci>T_Hsr</ci>
                            <apply>
                                <plus/>
                                <cn cellml:units="dimensionless">1</cn>
                                <ci>T_H</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>a_m1</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>k_m1</ci>
                        <ci>T_Hi</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <power/>
                            <ci>T_Cai</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                        <apply>
                            <times/>
                            <apply>
                                <power/>
                                <ci>T_Cai</ci>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                            <ci>T_Hi</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>T_Hi</ci>
                            <apply>
                                <plus/>
                                <cn cellml:units="dimensionless">1</cn>
                                <ci>T_H1</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>a_m2</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>k_m2</ci>
                        <ci>ADP</ci>
                        <apply>
                            <power/>
                            <ci>T_Casr</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                        <ci>T_H</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <apply>
                                <power/>
                                <ci>T_Casr</ci>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                            <ci>T_H</ci>
                        </apply>
                        <ci>T_H</ci>
                        <apply>
                            <times/>
                            <ci>T_Hsr</ci>
                            <apply>
                                <plus/>
                                <cn cellml:units="dimensionless">1</cn>
                                <ci>T_H</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>a_m3</ci>
                <apply>
                    <times/>
                    <ci>k_m3</ci>
                    <ci>P_i</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>s1</ci>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <ci>a_p2</ci>
                        <ci>a_p3</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>a_m1</ci>
                        <ci>a_p3</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>a_m1</ci>
                        <ci>a_m2</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>s2</ci>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <ci>a_p1</ci>
                        <ci>a_p3</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>a_m2</ci>
                        <ci>a_p1</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>a_m2</ci>
                        <ci>a_m3</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>s3</ci>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <ci>a_p1</ci>
                        <ci>a_p2</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>a_m3</ci>
                        <ci>a_m1</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>a_m3</ci>
                        <ci>a_p2</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_cycle</ci>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>a_p1</ci>
                            <ci>a_p2</ci>
                            <ci>a_p3</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>a_m1</ci>
                            <ci>a_m2</ci>
                            <ci>a_m3</ci>
                        </apply>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>s1</ci>
                        <ci>s2</ci>
                        <ci>s3</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>Ca_sr</ci>
                </apply>
                <cn cellml:units="flux">1.0</cn>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="environment" component_2="SERCA"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
        <rdf:Seq xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#277d3fce-1e82-45ea-884f-2e76a89f4a54">
            <rdf:li xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="rdf:#5a8af88e-79ba-4e3a-a593-38f0298d25aa"/>
            <rdf:li xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="rdf:#3e2e26bb-0f27-47bd-bd91-6953b7b7b874"/>
            <rdf:li xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="rdf:#7eff5bdd-8d4f-40df-8629-2acc3d9f4733"/>
            <rdf:li xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="rdf:#a2f05790-5ec5-42ca-a8d9-6db94a7a06eb"/>
        </rdf:Seq>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="">
            <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">A Thermodynamic Model of the Cardiac Sarcoplasmic/Endoplasmic Ca(2+) (SERCA) Pump: the three-state SERCA model</dc:title>
            <dc:publisher xmlns:dc="http://purl.org/dc/elements/1.1/"/>
            <cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#59ac1836-2f1d-4123-9e4d-279bd99d90be" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
            <dcterms:created xmlns:dcterms="http://purl.org/dc/terms/" rdf:resource="rdf:#f4cfda0d-7868-4c07-b67f-c405e97eee3e" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
            <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#56464cca-dd1f-4ca3-adbb-ebdb90f265be" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#b06c7bb6-6563-4d49-b6d0-be2036ec2c30">
            <vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Edmund</vCard:Given>
            <vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Crampin</vCard:Family>
            <vCard:Other xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">J</vCard:Other>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#594c54e4-2368-4aba-8dee-bd2175490d26">
            <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#6b548755-48ec-4433-8329-94c1c0c1c7c3" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
            <rdf:value xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#tran_model_2009">
            <bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#dde09b5f-2570-44e4-b7af-2782b3f4dc03" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
            <bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                <dc:subject xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                    <bqs:subject_type xmlns:bqs="http://www.cellml.org/bqs/1.0#">keyword</bqs:subject_type>
                    <rdf:value xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                        <rdf:Bag xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                            <rdf:li xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">electrophysiology</rdf:li>
                            <rdf:li xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">cardiac</rdf:li>
                            <rdf:li xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">SERCA</rdf:li>
                            <rdf:li xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">calcium dynamics</rdf:li>
                        </rdf:Bag>
                    </rdf:value>
                </dc:subject>
            </bqs:reference>
            <cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#594c54e4-2368-4aba-8dee-bd2175490d26" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#1aa7136e-0363-4f6f-8e67-d823ba86d1ab">
            <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#277d3fce-1e82-45ea-884f-2e76a89f4a54" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
            <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">A Thermodynamic Model of the Cardiac Sarcoplasmic/Endoplasmic Ca(2+) (SERCA) Pump</dc:title>
            <bqs:volume xmlns:bqs="http://www.cellml.org/bqs/1.0#">96</bqs:volume>
            <bqs:first_page xmlns:bqs="http://www.cellml.org/bqs/1.0#">2029</bqs:first_page>
            <bqs:Journal xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#dbd53168-2407-4b79-a3da-77beb4f217ab" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
            <dcterms:issued xmlns:dcterms="http://purl.org/dc/terms/" rdf:resource="rdf:#80797212-992e-4436-9c29-95f80d6ea1d5" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
            <bqs:last_page xmlns:bqs="http://www.cellml.org/bqs/1.0#">2042</bqs:last_page>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#56464cca-dd1f-4ca3-adbb-ebdb90f265be">
            <vCard:ORG xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#05a40c92-02a0-4779-941b-2267d63e9f20" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
            <vCard:EMAIL xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#b59fbe3f-3a81-46d3-a98c-90bb39108878" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
            <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#a3800ea1-7856-4edb-9cf1-0579364ed799" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#a2f05790-5ec5-42ca-a8d9-6db94a7a06eb">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
            <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#b06c7bb6-6563-4d49-b6d0-be2036ec2c30" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#6c88af07-dec5-4659-aa5c-908846a4c4ad">
            <vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Denis</vCard:Given>
            <vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Loiselle</vCard:Family>
            <vCard:Other xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">S</vCard:Other>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#3e2e26bb-0f27-47bd-bd91-6953b7b7b874">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
            <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#01fe663c-eefc-4a1e-8d24-f6891a804dc2" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#05a40c92-02a0-4779-941b-2267d63e9f20">
            <vCard:Orgname xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">The University of Auckland</vCard:Orgname>
            <vCard:Orgunit xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Auckland Bioengineering Institute</vCard:Orgunit>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#f4cfda0d-7868-4c07-b67f-c405e97eee3e">
            <dcterms:W3CDTF xmlns:dcterms="http://purl.org/dc/terms/">2009-03-05T00:00:00+00:00</dcterms:W3CDTF>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#f89919f3-1b06-4a91-b591-952b37d6146d">
            <vCard:FN xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Catherine Lloyd</vCard:FN>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#b59fbe3f-3a81-46d3-a98c-90bb39108878">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="http://imc.org/vCard/3.0#internet"/>
            <rdf:value xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">k.tran@auckland.ac.nz</rdf:value>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#a3800ea1-7856-4edb-9cf1-0579364ed799">
            <vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Kenneth</vCard:Given>
            <vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Tran</vCard:Family>
            <vCard:Other xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#62cab138-9811-478d-9183-2d5af616ef1e">
            <vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Kenneth</vCard:Given>
            <vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Tran</vCard:Family>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#01fe663c-eefc-4a1e-8d24-f6891a804dc2">
            <vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Nicolas</vCard:Given>
            <vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Smith</vCard:Family>
            <vCard:Other xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">P</vCard:Other>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#7eff5bdd-8d4f-40df-8629-2acc3d9f4733">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
            <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#6c88af07-dec5-4659-aa5c-908846a4c4ad" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#5a8af88e-79ba-4e3a-a593-38f0298d25aa">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
            <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#62cab138-9811-478d-9183-2d5af616ef1e" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#6b548755-48ec-4433-8329-94c1c0c1c7c3">
            <vCard:FN xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#59ac1836-2f1d-4123-9e4d-279bd99d90be">
            <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#f89919f3-1b06-4a91-b591-952b37d6146d" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
            <rdf:value xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">This CellML model has been unit checked and is known to run in both PCEnv and COR.  This particular version of the CellML model describes the three-state cooperative SERCA model and recreates figure 13.  In order to recreate this figure we have had to add an additional equation to the model to define the rate of change in Casr.</rdf:value>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#dde09b5f-2570-44e4-b7af-2782b3f4dc03">
            <bqs:Pubmed_id xmlns:bqs="http://www.cellml.org/bqs/1.0#">19254563</bqs:Pubmed_id>
            <bqs:JournalArticle xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#1aa7136e-0363-4f6f-8e67-d823ba86d1ab" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#80797212-992e-4436-9c29-95f80d6ea1d5">
            <dcterms:W3CDTF xmlns:dcterms="http://purl.org/dc/terms/">2009-03-00 00:00</dcterms:W3CDTF>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#dbd53168-2407-4b79-a3da-77beb4f217ab">
            <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Biophysical Journal</dc:title>
        </rdf:Description>
    </rdf:RDF>
</model>
